PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Completed URL = https://app.prolific.co/submissions/complete?cc=C164PHTK
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = WHNClipsValidation
  keyboardBackend = ioHub
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Routines
  Routine trial
    MovieComponent hazard_video
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = $video_file
      startVal [time (s)] = 1.0
      units = pix
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    KeyboardComponent hazardVideoSkip
      allowedKeys = 'y'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent fixation_cross
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        trialCount = 0
        printed = False
      Begin Routine:
        trialCount += 1
        VidName = (hazard_video.filename)
        #print(VidName)
  Routine Start
    TextComponent exp_start_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to this task!

        You will be taking part in a hazard perception experiment. Footage filmed from the perspective of a driver out on the road will be shown on screen. Whenever you spot a hazard, press the one of the shape buttons on the steering wheel as fast as you can.

        A hazard is defined as an event that makes you as the driver change speed or direction to avoid a collision

        You only need to press a button once per hazard to register a response

        Press the space bar to continue
    KeyboardComponent exp_start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.0
      store = nothing
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  Routine end_of_practice
    TextComponent practice_end_text
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the end of the practice trials

        In the each block you will see 10 clips. Once the answers appear, press the number key on your keyboard that corresponds to the answer on screen.

        Press the space bar to begin
    KeyboardComponent end_of_practice_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
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  Routine exp_start
    TextComponent Info
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        You will be taking part in a Hazard Prediction or 'What Happens Next' task.

        Video footage filmed from the driver's perspective will be shown on the monitor in front of you. At some point in each clip, it will cut to black and you will be presented with four potential scenarios.

        Your task is to select what you think happens next from the answers presented to you by pressing the corresponding number between 1 and 4 on your keyboard

        Press the space bar to begin
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
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  Routine end
    TextComponent end_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment

        Thanks for your help! You should be returned to Prolific to complete your participation.

        Press the space bar to exit
    KeyboardComponent end_resp
      allowedKeys = 'space', 'a'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine break_2
    TextComponent break_text
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        This is the end of this block

        Feel free to take a break

        Press the space bar to continue
    KeyboardComponent breakresp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        breakTrials = [10,20,30]
      Each Frame:
        if trialCount % 10 != 0:
            continueRoutine = False
  Routine null_trial
    MovieComponent null_movie
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = $null_file
      startVal [time (s)] = 0.5
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    KeyboardComponent null_key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      store = all keys
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    KeyboardComponent null_skip
      allowedKeys = 'y'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
      syncScreenRefresh = False
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    TextComponent null_fixation
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    JoyButtonsComponent button_resp_3
      allowedKeys = 0,1,2,3,4
      deviceNumber = 0
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        nullTrials = [4,8,16,20]
      Begin Routine:
        trialCount += 1
      Each Frame:
        if trialCount in nullTrials:
            continueRoutine = True
        else:
            continueRoutine = False
  Routine practiceTrial
    MovieComponent pracWHNvideo
      backend = moviepy
      forceEndRoutine = True
      movie = WHNPractice2.mp4
      ori [set every repeat] = 0
      pos [set every repeat] = [0,0]
      saveStartStop = False
      startVal [time (s)] = 0.5
      units = pix
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    KeyboardComponent skipPrac
      allowedKeys = 'y'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent practice_fixation
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Responses
    TextComponent Title
      letterHeight = 0.1
      pos = (-2, 2)
      startVal [time (s)] = 0.0
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      text:
        Any text

        What happens next?
    TextComponent answers
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        $Ans1

        $Ans2

        $Ans3

        $Ans4
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space', '1', '2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MISC
    SliderComponent MiseryScale
      color = White
      forceEndRoutine = True
      granularity = 1
      labels = '0','1','2','3','4','5','6','7','8','9', '10'
      letterHeight = 0.025
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.4, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0,1,2,3,4,5,6,7,8,9,10)
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    TextComponent text_2
      letterHeight = 1.0
      pos = (0,6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = cm
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      text:
        How are you feeling right now?
    ImageComponent image
      image = MISC.jpg
      saveStartStop = False
      size = (0.7,0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent MISCskip
      allowedKeys = 'y'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Confidence
    TextComponent Conf_q
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How confident were you in your choice?
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    KeyboardComponent confSkip
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    SliderComponent conf_slider
      forceEndRoutine = True
      granularity = 0
      labels = '0 - Not at all', '100 - Completely'
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.4, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 1)
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  Routine response
    ImageComponent WHNAnswer_2
      image [set every repeat] = $image_file
      saveStartStop = False
      size = [1920,1080]
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent trialrespkey
      allowedKeys = 'y','1','2','3','4'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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  Routine pracReponse
    ImageComponent pracImage
      image = WHNPractice2.jpg
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent prac_resp
      allowedKeys = 'y','1','2','3','4'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Info_2
    TextComponent text
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        What will I be required to do?
        This study sets out to measure your Hazard Prediction ability on a series of driving clips. You will view 40 clips filmed from the perspective of a driver. Just before a hazard occurs, the clip will stop, and you will be asked ‘What Happens Next?’. You can respond by pressing the corresponding numbers between 1 and 4 on your keyboard. The study should take between 30 and 40 minutes. You will first see a practice clip, and then proceed through 4 blocks of 10 clips. You may take a break at any point required.

        How will my data be used?
        'The good data management' guidance of the University of Glasgow will be followed. Any personal data collected from you will be anonymised and stored in an encrypted file, under a participant number. Your data will form part of a larger dataset which will be analysed and potentially written up as part of a research paper to be published in an academic journal. However, it will not be possible to link any of these data back to you individually once it is part of the larger dataset.
        If you would like to talk to the researcher about your data, make sure to record your participant number and keep a hold of the receipt at the end of the experiment.

        How can I get in contact with the researcher?
        My email is t.goodge.1@research.gla.ac.uk, where you can get in contact about your participation, to withdraw your data or find out the results of the experiment once data collection has ended. You can also contact the project supervisor at Stephen.Brewster@Glasgow.ac.uk Please make a note of these now if you wish to contact us about your data.

        What if I do not wish to take part?
        If you do not wish to take part in the experiment, feel free to close this window now.

        Press the space bar to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
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Flow
  Routine exp_start
  Routine practiceTrial
  Routine pracReponse
  Routine end_of_practice
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = WHNVideoList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'video_file': 'Clip01WHN.mp4', 'image_file': 'Slide1', 'Correct': 4, 'Ans1': 'The cyclist on the left pulls into your lane', 'Ans2': 'A pedestrian steps out from behind the van parked on the left', 'Ans3': 'A pedestrian steps out from between cars in the oncoming lane', 'Ans4': 'A car pulls out from the side road on the right', 'CorrAns': [3]},
      {'video_file': 'Clip02WHN.mp4', 'image_file': 'Slide2', 'Correct': 2, 'Ans1': 'The blue car on the left pulls off in front of you', 'Ans2': 'Pedestrians step out into the road from the right', 'Ans3': 'The white lorry on the right pulls round into your lane', 'Ans4': 'A cyclist pulls out from behind the parked cars on the left', 'CorrAns': [1]},
      {'video_file': 'Clip03WHN.mp4', 'image_file': 'Slide3', 'Correct': 1, 'Ans1': 'The door of the car parked on the left swings open and the driver steps out', 'Ans2': 'A pedestrian at the bus stop steps out into the road', 'Ans3': 'A car pulls out from the side road on the right', 'Ans4': 'An oncoming car comes round the corner, encroaching in your lane', 'CorrAns': [0]},
      {'video_file': 'Clip04WHN.mp4', 'image_file': 'Slide4', 'Correct': 3, 'Ans1': 'A pedestrian steps out from behind the car parked on the left', 'Ans2': 'A pedestrian steps out from behind the van parked on the right', 'Ans3': 'A van pulls out from the side road on the left', 'Ans4': 'A child runs into the road from the school on the right', 'CorrAns': [2]}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
    Routine trial
    Routine response
    Routine break_2
  LoopTerminator trials_3
  Routine end
